/*----------------------------------------------------------------------------

	Simplified model of fast-spiking cortical neuron
	================================================

        Single-compartment model of "fast-spiking" cortical neurons,
        which is the most commonly encountered electrophysiological type
        of inhibitory (interneuron) cell in cortex.  The model is based
	on the presence of two voltage-dependent currents: 
        - INa, IK: action potentials
	(no spike-frequency adaptation in this model)


  Model described in:

   Pospischil, M., Toledo-Rodriguez, M., Monier, C., Piwkowska, Z., 
   Bal, T., Fregnac, Y., Markram, H. and Destexhe, A.
   Minimal Hodgkin-Huxley type models for different classes of
   cortical and thalamic neurons.
   Biological Cybernetics 99: 427-441, 2008.

  The model was taken from a thalamocortical model, described in:

   Destexhe, A., Contreras, D. and Steriade, M.
   Mechanisms underlying the synchronizing action of corticothalamic
   feedback through inhibition of thalamic relay cells.
   J. Neurophysiol. 79: 999-1016, 1998.


        Alain Destexhe, CNRS, 2009
	http://cns.iaf.cnrs-gif.fr

----------------------------------------------------------------------------*/

//----------------------------------------------------------------------------
//  create IN cells
//----------------------------------------------------------------------------

print " "
print "<<==================================>>"
print "<<            CREATE CELLS          >>"
print "<<==================================>>"
print " "

xopen("sIN_template")		// read geometry file

ncells = 1			// nb of cells in each layer <<>>

objectvar IN[ncells]
for i=0,ncells-1 {
  IN[i] = new sIN()
}